Select_Active_File
/FILE_NAME=ALL_FILES
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! /SUBJECT_TAGS=NO_SUBJECT
;

Export_Data_To_Ascii_File
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/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=LEFT_ARM_SWING_MAX+LEFT_ARM_SWING_MAX_MEAN+LEFT_ARM_SWING_MAX_STDDEV+LEFT_ARM_SWING_MIN+LEFT_ARM_SWING_MIN_MEAN+LEFT_ARM_SWING_MIN_STDDEV+LEFT_ARM_SWING_ROM+LEFT_ARM_SWING_ROM_MEAN+RIGHT_ARM_SWING_MAX+RIGHT_ARM_SWING_MAX_MEAN+RIGHT_ARM_SWING_MAX_STDDEV+RIGHT_ARM_SWING_MIN+RIGHT_ARM_SWING_MIN_MEAN+RIGHT_ARM_SWING_MIN_STDDEV+RIGHT_ARM_SWING_ROM+RIGHT_ARM_SWING_ROM_MEAN
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /CREATE_FOLDER_PATH=TRUE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

Select_Active_File
/FILE_NAME=ALL_FILES
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;

Export_Data_To_Ascii_File
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/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=LEFT_TORSO_ANGLE_MEAN+LEFT_TORSO_ANGLE_MEAN_MEAN+LEFT_TORSO_ANGLE_MEAN_STDDEV+RIGHT_TORSO_ANGLE_MEAN+RIGHT_TORSO_ANGLE_MEAN_MEAN+RIGHT_TORSO_ANGLE_MEAN_STDDEV
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;

Select_Active_File
/FILE_NAME= ALL_FILES
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;

Export_Data_To_Ascii_File
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/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=TEMPORAL_DISTANCE
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;

