Select_Active_File
/FILE_NAME=ALL_FILES
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! /SUBJECT_TAGS=NO_SUBJECT
;

Compute_Model_Based_Data
/RESULT_NAME=Model COG
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=MODEL_COG
/SEGMENT=
/REFERENCE_SEGMENT=
! /RESOLUTION_COORDINATE_SYSTEM=LAB
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEED=0.0
;

Metric_Mean
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=Model COG_Mean
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Model COG
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=ROI_START+ROI_END
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=TRUE
! /APPEND_TO_EXISTING_VALUES=FALSE
;

Metric_StdDev
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/RESULT_METRIC_NAME=Model COG_STDDEV
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/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Model COG
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=ROI_START+ROI_END
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
! /GENERATE_MEAN_AND_STDDEV=TRUE
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;

Export_Data_To_Ascii_File
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/SIGNAL_TYPES=LINK_MODEL_BASED+METRIC+METRIC
/SIGNAL_FOLDER=ORIGINAL+PROCESSED+PROCESSED
/SIGNAL_NAMES=Model COG+Model COG_Mean+Model COG_STDDEV
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /CREATE_FOLDER_PATH=TRUE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

